CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "F.TIF")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "R.TIF")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "D.TIF")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:7|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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:CropBlue
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureTexture:[module_num:13|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
    Select images to measure:CropBlue
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:4
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureColocalization:[module_num:15|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
    Select images to measure:CropBlue, CropGreen
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Both
    Select objects to measure:Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Fast

MeasureImageIntensity:[module_num:16|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
    Select images to measure:CropBlue
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageQuality:[module_num:17|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
    Calculate metrics for which images?:Select...
    Image count:3
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigBlue
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigGreen
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRed
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
CalculateMath:[module_num:18|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
    Name the output measurement:Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_CropBlue
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ClassifyObjects:[module_num:19|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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:350
    Use a bin for objects below the threshold?:No
    Upper threshold:700
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Small,Medium,Large
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model
    Allow fuzzy feature matching?:No

GrayToColor:[module_num:20|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:CropRed
    Select the image to be colored green:CropGreen
    Select the image to be colored blue:CropBlue
    Name the output image:RGBImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:RGBImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:RGB
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\sharif uni\\1st term\\Intelligent Analysis of Biomedical Images\\HWs\\HW3\\Prac
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:No
